PsychoPy2experiment version="2020.2.5"
Settings
  Experiment info = {'participant': '', 'age': '', 'sex': '', 'occupation': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  expName = XPPSYCH
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Routines
  Routine WelcomeScreen
    PolygonComponent polygon1
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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    TextComponent welcome
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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      text:
        WELCOME TO THIS EXPERIMENT!

        Kindly read the series of forenames (items) as they appear on the screen.
  Routine SupraStudy
    PolygonComponent polygon
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.40
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    TextComponent ForenameSup
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text [set every repeat] = $NameSup
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    TextComponent CueSup1
      letterHeight = 0.1
      startVal [time (s)] = 1.2
      stopVal [duration (s)] = 1.2
      text [set every repeat] = $CueSup
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    TextComponent BlankSup
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.01
      startVal [time (s)] = 2.4
      stopVal [duration (s)] = 1.0
      text = .
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  Routine Distractor1
    PolygonComponent polygon_2
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent dis1
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = .
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  Routine InstructionsScreen
    PolygonComponent polygon_3
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The forenames (items) you read a while ago will reappear with other forenames not presented earlier. Determine whether the item is old (shown in the study phase) by pressing "O" or new (not shown in the study phase) by pressing "N".

        "O" Key - Old (present in the study phase)
        "N" Key - New (not present in the study phase)

        Press the spacebar to proceed.
    KeyboardComponent dis1key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SupraTest
    PolygonComponent polygon_4
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent suptest
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $TestSup
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    KeyboardComponent key_resp
      allowedKeys = 'o', 'n'
      correctAns = $AnswerSup
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Phase2
    PolygonComponent polygon_5
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent distractor1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = What is 0 x 0 = ?
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    KeyboardComponent key_resp_2
      allowedKeys = '0'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SubliStudy
    PolygonComponent polygon_6
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.3
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    TextComponent ForenameSub
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text [set every repeat] = $NameSub
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    TextComponent Mask1
      letterHeight = 0.1
      startVal [time (s)] = 1.2
      stopVal [duration (frames)] = 4
      text = ###########
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    TextComponent Cue
      letterHeight = 0.1
      startVal [time (s)] = 1.266
      stopVal [duration (frames)] = 2
      text [set every repeat] = $CueSub
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    TextComponent Mask2
      letterHeight = 0.1
      startVal [time (s)] = 1.3
      stopVal [duration (s)] = .250
      text = ###########
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    TextComponent blank1
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.1
      startVal [time (s)] = 1.55
      stopVal [duration (s)] = 1.7
      text = .
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  Routine Instructions2
    PolygonComponent polygon_7
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent textphase2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Kindly read the series of forenames (items) as they appear on the screen.
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  Routine SubliTest
    PolygonComponent polygon_8
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent SubTest
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $TestSub
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    KeyboardComponent key_resp_3
      allowedKeys = 'o','n'
      correctAns = $AnswerSub
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine SubliStudy_2
  Routine EndScreen
    PolygonComponent polygon_9
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        END OF EXPERIMENT

        Thank you for participating!
Flow
  Routine WelcomeScreen
  LoopInitiator SupraTrials loopType="TrialHandler"
    conditionsFile = SupraliminalNameCue.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('NameSup', 'Julie'), ('CueSup', 'REMEMBER')]),
      OrderedDict([('NameSup', 'Karla'), ('CueSup', 'FORGET')]),
      OrderedDict([('NameSup', 'Missy'), ('CueSup', 'REMEMBER')]),
      OrderedDict([('NameSup', 'Nicki'), ('CueSup', 'FORGET')]),
      OrderedDict([('NameSup', 'Paris'), ('CueSup', 'REMEMBER')]),
      OrderedDict([('NameSup', 'Raven'), ('CueSup', 'FORGET')]),
      OrderedDict([('NameSup', 'Stacy'), ('CueSup', 'REMEMBER')]),
      OrderedDict([('NameSup', 'Tammy'), ('CueSup', 'FORGET')]),
      OrderedDict([('NameSup', 'Venus'), ('CueSup', 'REMEMBER')]),
      OrderedDict([('NameSup', 'Wendy'), ('CueSup', 'FORGET')]),
      OrderedDict([('NameSup', 'Pablo'), ('CueSup', 'REMEMBER')]),
      OrderedDict([('NameSup', 'Robin'), ('CueSup', 'FORGET')]),
      OrderedDict([('NameSup', 'Shawn'), ('CueSup', 'REMEMBER')]),
      OrderedDict([('NameSup', 'Tobie'), ('CueSup', 'FORGET')]),
      OrderedDict([('NameSup', 'Walter'), ('CueSup', 'REMEMBER')]),
      OrderedDict([('NameSup', 'Julio'), ('CueSup', 'FORGET')]),
      OrderedDict([('NameSup', 'Marty'), ('CueSup', 'REMEMBER')]),
      OrderedDict([('NameSup', 'North'), ('CueSup', 'FORGET')]),
      OrderedDict([('NameSup', 'Kourt'), ('CueSup', 'REMEMBER')]),
      OrderedDict([('NameSup', 'Lucca'), ('CueSup', 'FORGET')])]
    Routine SupraStudy
  LoopTerminator SupraTrials
  Routine Distractor1
  Routine InstructionsScreen
  LoopInitiator SupraTests loopType="TrialHandler"
    conditionsFile = SupraliminalTest.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('TestSup', 'Julie'), ('AnswerSup', 'o')]),
      OrderedDict([('TestSup', 'Karla'), ('AnswerSup', 'o')]),
      OrderedDict([('TestSup', 'Missy'), ('AnswerSup', 'o')]),
      OrderedDict([('TestSup', 'Nicki'), ('AnswerSup', 'o')]),
      OrderedDict([('TestSup', 'Paris'), ('AnswerSup', 'o')]),
      OrderedDict([('TestSup', 'Raven'), ('AnswerSup', 'o')]),
      OrderedDict([('TestSup', 'Stacy'), ('AnswerSup', 'o')]),
      OrderedDict([('TestSup', 'Tammy'), ('AnswerSup', 'o')]),
      OrderedDict([('TestSup', 'Venus'), ('AnswerSup', 'o')]),
      OrderedDict([('TestSup', 'Wendy'), ('AnswerSup', 'o')]),
      OrderedDict([('TestSup', 'Pablo'), ('AnswerSup', 'o')]),
      OrderedDict([('TestSup', 'Robin'), ('AnswerSup', 'o')]),
      OrderedDict([('TestSup', 'Shawn'), ('AnswerSup', 'o')]),
      OrderedDict([('TestSup', 'Tobie'), ('AnswerSup', 'o')]),
      OrderedDict([('TestSup', 'Walter'), ('AnswerSup', 'o')]),
      OrderedDict([('TestSup', 'Julio'), ('AnswerSup', 'o')]),
      OrderedDict([('TestSup', 'Marty'), ('AnswerSup', 'o')]),
      OrderedDict([('TestSup', 'North'), ('AnswerSup', 'o')]),
      OrderedDict([('TestSup', 'Kourt'), ('AnswerSup', 'o')]),
      OrderedDict([('TestSup', 'Lucca'), ('AnswerSup', 'o')]),
      OrderedDict([('TestSup', 'Jirah'), ('AnswerSup', 'n')]),
      OrderedDict([('TestSup', 'Katie'), ('AnswerSup', 'n')]),
      OrderedDict([('TestSup', 'Molly'), ('AnswerSup', 'n')]),
      OrderedDict([('TestSup', 'Norah'), ('AnswerSup', 'n')]),
      OrderedDict([('TestSup', 'Paris'), ('AnswerSup', 'n')]),
      OrderedDict([('TestSup', 'Reese'), ('AnswerSup', 'n')]),
      OrderedDict([('TestSup', 'Sarah'), ('AnswerSup', 'n')])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
    Routine SupraTest
  LoopTerminator SupraTests
  LoopInitiator DistractorTrials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine Phase2
  LoopTerminator DistractorTrials
  Routine Instructions2
  LoopInitiator SubliTrials loopType="TrialHandler"
    conditionsFile = SubliminalNameCue.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('NameSub', 'Adela'), ('CueSub', 'REMEMBER')]),
      OrderedDict([('NameSub', 'Diana'), ('CueSub', 'FORGET')]),
      OrderedDict([('NameSub', 'Brena'), ('CueSub', 'REMEMBER')]),
      OrderedDict([('NameSub', 'Rosey'), ('CueSub', 'FORGET')]),
      OrderedDict([('NameSub', 'Jessa'), ('CueSub', 'REMEMBER')]),
      OrderedDict([('NameSub', 'Carey'), ('CueSub', 'FORGET')]),
      OrderedDict([('NameSub', 'Liana'), ('CueSub', 'REMEMBER')]),
      OrderedDict([('NameSub', 'Mabel'), ('CueSub', 'FORGET')]),
      OrderedDict([('NameSub', 'Sofia'), ('CueSub', 'REMEMBER')]),
      OrderedDict([('NameSub', 'Nasha'), ('CueSub', 'FORGET')]),
      OrderedDict([('NameSub', 'Aaron'), ('CueSub', 'REMEMBER')]),
      OrderedDict([('NameSub', 'Boyce'), ('CueSub', 'FORGET')]),
      OrderedDict([('NameSub', 'Colby'), ('CueSub', 'REMEMBER')]),
      OrderedDict([('NameSub', 'Gregg'), ('CueSub', 'FORGET')]),
      OrderedDict([('NameSub', 'Flynn'), ('CueSub', 'REMEMBER')]),
      OrderedDict([('NameSub', 'Eliot'), ('CueSub', 'FORGET')]),
      OrderedDict([('NameSub', 'Floyd'), ('CueSub', 'REMEMBER')]),
      OrderedDict([('NameSub', 'Dylan'), ('CueSub', 'FORGET')]),
      OrderedDict([('NameSub', 'Heath'), ('CueSub', 'REMEMBER')]),
      OrderedDict([('NameSub', 'James'), ('CueSub', 'FORGET')])]
    Routine SubliStudy
  LoopTerminator SubliTrials
  Routine InstructionsScreen
  Routine Distractor1
  LoopInitiator SubliTests loopType="TrialHandler"
    conditionsFile = SubliminalTest.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('TestSub', 'Adela'), ('AnswerSub', 'o')]),
      OrderedDict([('TestSub', 'Diana'), ('AnswerSub', 'o')]),
      OrderedDict([('TestSub', 'Brina'), ('AnswerSub', 'o')]),
      OrderedDict([('TestSub', 'Rosey'), ('AnswerSub', 'o')]),
      OrderedDict([('TestSub', 'Jessa'), ('AnswerSub', 'o')]),
      OrderedDict([('TestSub', 'Carey'), ('AnswerSub', 'o')]),
      OrderedDict([('TestSub', 'Liana'), ('AnswerSub', 'o')]),
      OrderedDict([('TestSub', 'Mabel'), ('AnswerSub', 'o')]),
      OrderedDict([('TestSub', 'Sofia'), ('AnswerSub', 'o')]),
      OrderedDict([('TestSub', 'Nasha'), ('AnswerSub', 'o')]),
      OrderedDict([('TestSub', 'Aaron'), ('AnswerSub', 'o')]),
      OrderedDict([('TestSub', 'Boyce'), ('AnswerSub', 'o')]),
      OrderedDict([('TestSub', 'Colby'), ('AnswerSub', 'o')]),
      OrderedDict([('TestSub', 'Gregg'), ('AnswerSub', 'o')]),
      OrderedDict([('TestSub', 'Flynn'), ('AnswerSub', 'o')]),
      OrderedDict([('TestSub', 'Eliot'), ('AnswerSub', 'o')]),
      OrderedDict([('TestSub', 'Floyd'), ('AnswerSub', 'o')]),
      OrderedDict([('TestSub', 'Dylan'), ('AnswerSub', 'o')]),
      OrderedDict([('TestSub', 'Heath'), ('AnswerSub', 'o')]),
      OrderedDict([('TestSub', 'James'), ('AnswerSub', 'o')]),
      OrderedDict([('TestSub', 'Elsha'), ('AnswerSub', 'n')]),
      OrderedDict([('TestSub', 'Hanna'), ('AnswerSub', 'n')]),
      OrderedDict([('TestSub', 'Poppy'), ('AnswerSub', 'n')]),
      OrderedDict([('TestSub', 'Daren'), ('AnswerSub', 'n')]),
      OrderedDict([('TestSub', 'Sandy'), ('AnswerSub', 'n')]),
      OrderedDict([('TestSub', 'Andre'), ('AnswerSub', 'n')]),
      OrderedDict([('TestSub', 'Blake'), ('AnswerSub', 'n')])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
    Routine SubliTest
  LoopTerminator SubliTests
  Routine EndScreen
